PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = non_rigid_shiny_experiment_v3
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent shiftListJS
      Code Type = JS
      Begin JS Experiment:
        function shiftList(liste) {
            var top;
            top = liste.pop();
            liste.unshift(top);
            return liste;
        }
    CodeComponent shiftListPy
      Code Type = Py
      Begin Experiment:
        def shift_list(liste):
            top=liste.pop()
            liste.insert(0,top)
            return liste
    CodeComponent select_row
      Code Type = Auto->JS
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      Begin Experiment:
        #def combine_lists(a,b):
        #    combined_list=shift_list(a)+shift_list(b)
        #    return combined_list
        #time_order=[0,2.4]
        ### Gloss List
        i=0
        n_repetition=0
        j=[10,11,12,13,14,15,16,17,18,19]
        ### HIGH DECISION
        high_decision_ind=[0,1,2,3,4,5,6,7,8,9]
        low_decision_ind=[10,11,12,13,14,15,16,17,18,19]
        shuffle(high_decision_ind)
        shuffle(low_decision_ind)
        ## index selecter
        targetPos=[(win.size[0]/4),-1*(win.size[0]/4)]
      Begin Routine:
        #shuffler(time_order)
        shuffle(targetPos)
        if high_decision_ind[i]>10:
            block_type="MATTE?"
        else:
            block_type="SHINY?"
      End Routine:
        ##### End of Routine
        ### Encode object directories
        #gloss_trials.addData('high_dec_dir',myDataGloss.listOfTrials[high_decision_id[i]]["obj_dir"])
        #gloss_trials.addData('low_dec_dir',myDataGloss.listOfTrials[high_decision_id[i]+10]["obj_dir"])

        gloss_trials.addData('high_dec_dir',gloss_trials.trialList[high_decision_ind[i]]["obj_dir"])
        gloss_trials.addData('low_dec_dir',gloss_trials.trialList[low_decision_ind[i]]["obj_dir"])
        gloss_trials.addData('groundTruth',gloss_trials.trialList[high_decision_ind[i]]["Glossiness"])
        #gloss_trials.addData('highDifficulty',gloss_trials.trialList[high_decision_ind[i]]["difficulty_index"])
        #gloss_trials.addData('lowDifficulty',gloss_trials.trialList[low_decision_ind[i]]["difficulty_index"])
        gloss_trials.addData('highly',gloss_trials.trialList[high_decision_ind[i]]["test_object"])
        gloss_trials.addData('lowInd',gloss_trials.trialList[low_decision_ind[i]]["test_object"])
        gloss_trials.addData('highDecision',gloss_trials.trialList[high_decision_ind[i]]["decisionNormalized"])
        gloss_trials.addData('lowDecision',gloss_trials.trialList[low_decision_ind[i]]["decisionNormalized"])
        gloss_trials.addData('deltaDecision',gloss_trials.trialList[high_decision_ind[i]]["decision_value_norm"]-gloss_trials.trialList[low_decision_ind[i]]["decision_value_norm"])


        gloss_trials.addData('actual_target_pos',"right" if targetPos[1]>0 else "left")
    TextComponent question_gloss
      letterHeight = 0.03
      pos = [0, 0.35]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Which object is more "+block_type
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    MovieComponent high_gloss
      No audio = True
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie [set every repeat] = $gloss_trials.trialList[high_decision_ind[i]]["obj_dir"]
      pos = (targetPos[1], 0)
      saveStartStop = False
      size = [256,256]
      startVal [time (s)] = 0
      units = pix
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    MovieComponent low_gloss
      No audio = True
      backend = moviepy
      contrast = 0.5
      forceEndRoutine = False
      loop = True
      movie [set every repeat] = $gloss_trials.trialList[low_decision_ind[i]]["obj_dir"]
      opacity = 0.4
      pos = (targetPos[0], 0)
      saveStartStop = False
      size = [256,256]
      startVal [time (s)] = 0
      units = pix
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    KeyboardComponent response
      allowedKeys = 'left','right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent shiftListePy
      Code Type = Py
      End Routine:
        i+=1
        if i==10:
            i=0
            n_repetition+=1
            #high_decision_id=shift_list(high_decision_ind)
            low_decision_ind=shift_list(low_decision_ind)
    CodeComponent shiftListeJS2
      Code Type = JS
      End JS Routine:
        i+=1;
        if ((i === 10)) {
            i = 0;
            n_repetition += 1;
            top = low_decision_ind.pop();
            low_decision_ind.unshift(top);
        }
    CodeComponent importPy
      Code Type = Auto->JS
      disabled = True
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      Before Experiment:
        #listOfTrials=data.importConditions('gloss_exp_v2.csv')
        #listOfRigid=data.importConditions('rigid_exp_v2.csv')

        myDataGloss = data.TrialHandler(nReps=20, method='sequential',extrainfo=expInfo, originPath=-1,
        trialList=data.importConditions('gloss_exp_v2.csv'),
        seed=None, name='myDataGloss')

        myDataRigid = data.TrialHandler(nReps=20, method='sequential',extrainfo=expInfo, originPath=-1,
        trialList=data.importConditions('rigid_exp_v2.csv'),
        seed=None, name='myDataRigid')
    CodeComponent import_for_JS
      Code Type = JS
      disabled = True
      Begin JS Experiment:
        gloss_trials = new TrialHandler({
        psychoJS: psychoJS,
        nReps: 20, method:
        TrialHandler.Method.SEQUENTIAL,
        extraInfo: expInfo, originPath: undefined,
        trialList: 'gloss_exp_v2.csv',
        seed: undefined, name: 'gloss_trials'});


        soft_trials = new TrialHandler({
        psychoJS: psychoJS,
        nReps: 20, method:
        TrialHandler.Method.SEQUENTIAL,
        extraInfo: expInfo, originPath: undefined,
        trialList: 'rigid_exp_v2.csv',
        seed: undefined, name: 'myDataRigid'});
    CodeComponent shiftListeJS
      Code Type = JS
      disabled = True
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      End JS Routine:
        i += 1;
        if ((i === 10)) {
            i = 0;
            n_repetition += 1;
            top = low_decision_ind.pop();
            low_decision_ind.unshift(top);
        }
  Routine exp_start_instruc
    TextComponent welcome_text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment. On each trial, you will see two moving objects, one on each side of the screen. At the top of the screen will be two types of question. The questions will be either "which object looks more SHINY?" or "which object looks more SOFT?". You can look at both objects for as long as you like, then please click either the left or the right arrow key to indicate which object you think looks more glossy/matte.

        Press "Space" to continue
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent shuffleJS
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        import random
        def shuffler(lst):
            result = []
            while len(lst) > 0:
                index = random.randrange(0,len(lst))
                result.append(lst.pop(index))
            return result
    CodeComponent utilShuffle
      Code Type = JS
      Begin JS Experiment:
        shuffle = util.shuffle;
        insert= util.insert;
  Routine routine_1
  Routine blank
    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    CodeComponent encode_data
      Code Type = Auto->JS
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      Begin Experiment:
        feedback=""
        accuracy=[]
      End Routine:
        if targetPos[1]>0:
            if response.keys[-1]=='right':
                feedback="Doğru"
                accuracy.append(1)
                gloss_trials.addData('cor_preddnn', 1)
            elif response.keys[-1]=='left':
                feedback="Yanlış"
                accuracy.append(0)
                gloss_trials.addData('cor_preddnn', 0)

        elif targetPos[1]<0:
            if response.keys[-1]=='left':
                feedback="Doğru"
                accuracy.append(1)
                gloss_trials.addData('cor_preddnn', 1)
            elif response.keys[-1]=='right':
                feedback="Yanlış"
                accuracy.append(0)
                gloss_trials.addData('cor_preddnn', 0)
  Routine trial_rigidity
    CodeComponent blocks_target_pos
      Code Type = Auto->JS
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      Begin Routine:
        #shuffler(time_order)
        shuffle(targetPos)
        if high_decision_ind[i]>10:
            block_type="RIGID?"
        else:
            block_type="SOFT?"
    CodeComponent data_rigidity
      Code Type = Auto->JS
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      End Routine:
        ##### End of Routine
        ### Encode object directories
        #gloss_trials.addData('high_dec_dir',myDataGloss.listOfTrials[high_decision_id[i]]["obj_dir"])
        #gloss_trials.addData('low_dec_dir',myDataGloss.listOfTrials[high_decision_id[i]+10]["obj_dir"])

        gloss_trials.addData('high_dec_dir',gloss_trials.trialList[high_decision_ind[i]]["obj_dir"])
        gloss_trials.addData('low_dec_dir',gloss_trials.trialList[low_decision_ind[i]]["obj_dir"])
        gloss_trials.addData('groundTruth',gloss_trials.trialList[high_decision_ind[i]]["groundTruth"])
        gloss_trials.addData('highDifficulty',gloss_trials.trialList[high_decision_ind[i]]["difficulty_index"])
        gloss_trials.addData('lowDifficulty',gloss_trials.trialList[low_decision_ind[i]]["difficulty_index"])
        gloss_trials.addData('highInd',gloss_trials.trialList[high_decision_ind[i]]["test_object"])
        gloss_trials.addData('lowInd',gloss_trials.trialList[low_decision_ind[i]]["test_object"])
        gloss_trials.addData('deltaDecision',gloss_trials.trialList[high_decision_ind[i]]["decision_value_norm"]-gloss_trials.trialList[low_decision_ind[i]]["decision_value_norm"])


        gloss_trials.addData('actual_target_pos',"right" if targetPos[1]>0 else "left")
    TextComponent rigidity_question
      letterHeight = 0.03
      pos = [0, 0.35]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Which object is more "+block_type
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    MovieComponent high_soft
      No audio = True
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie [set every repeat] = $soft_trials.trialList[high_decision_ind[i]]["obj_dir"]
      pos = (targetPos[1], 0)
      saveStartStop = False
      size = [256,256]
      startVal [time (s)] = 0
      units = pix
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    MovieComponent low_soft
      No audio = True
      backend = moviepy
      contrast = 0.5
      forceEndRoutine = False
      loop = True
      movie [set every repeat] = $soft_trials.trialList[low_decision_ind[i]]["obj_dir"]
      opacity = 0.4
      pos = (targetPos[0], 0)
      saveStartStop = False
      size = [256,256]
      startVal [time (s)] = 0
      units = pix
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    KeyboardComponent response_soft
      allowedKeys = 'left','right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
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    CodeComponent shiftListeJS2_2
      Code Type = JS
      End JS Routine:
        i+=1;
        if ((i === 10)) {
            i = 0;
            n_repetition += 1;
            top = low_decision_ind.pop();
            low_decision_ind.unshift(top);
        }
    CodeComponent shiftListePy_2
      Code Type = Py
      End Routine:
        i+=1
        if i==10:
            i=0
            n_repetition+=1
            #high_decision_id=shift_list(high_decision_ind)
            low_decision_ind=shift_list(low_decision_ind)
  Routine instruction_softness
    TextComponent softness_instructions
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Congrutulations! Its time to do the second stage. In this section the question will be "which object looks more "SOFT". You can look at both objects for as long as you like, then please click either the left or the right arrow key to indicate which object you think looks more SOFT. There are a total of 100 trials in this section. You should indicate your selection by clicking right/left arrow.

        Press "Space" to continue
    KeyboardComponent resp_inst
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent rigid_data_sel
      Code Type = Auto->JS
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      Begin Routine:
        #time_order=[0,2.4]
        ### Gloss List
        i=0
        n_repetition=0
        j=[10,11,12,13,14,15,16,17,18,19]
        ### HIGH DECISION
        high_decision_ind=[0,1,2,3,4,5,6,7,8,9]
        low_decision_ind=[10,11,12,13,14,15,16,17,18,19]
        shuffle(high_decision_ind)
        shuffle(low_decision_ind)

        ## index selecter
        targetPos=[(win.size[0]/4),-1*(win.size[0]/4)]
  Routine familiarization_0
    TextComponent familiarization_shiny
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.1
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      text:
        But first lets get familiarized with object types.

        Now you will see some SHINY objects
        Shiny objects specularly reflect their environment. You will see some objects that reflecting natural enviromants or artifical noise environments.

        Press "Space" to continue
    KeyboardComponent skip
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.1
      store = nothing
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  Routine shiny_example
    CodeComponent exampleType
      Code Type = Auto->JS
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      Begin Experiment:
        example_type="SHINY"
      Begin Routine:
        example_type="SHINY" if Glossiness=="shiny" else "MATTE"

        #if difficulty_index==11 and groundTruth=="shiny":
        if shiny_adap_trials.thisTrialN==9:
            durMatte=1000
            startSkipMatte=0.3
            stopSkipMatte=1000
        else:
            durMatte=0
            startSkipMatte=0.099
            stopSkipMatte=0.1
    MovieComponent shiny_ex_trials
      No audio = True
      backend = moviepy
      forceEndRoutine = True
      loop = True
      movie [set every repeat] = $obj_dir
      saveStartStop = False
      size = [256,256]
      startVal [time (s)] = 0
      units = pix
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    KeyboardComponent skip_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.1
      store = nothing
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    TextComponent skip_text
      letterHeight = 0.03
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"It is a "+example_type + " object\n\nPress 'Space' to see next"
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  Routine full_blank
    TextComponent blank_100ms
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    TextComponent text_Matte
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = durMatte
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      text:
        Now you will see some MATTE objects.
        Matte objects dont reflect their enviroment, you can think them as objects that have painting on the surface.

        Press "Space" to continue
    KeyboardComponent skip_matte
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = startSkipMatte
      stopVal [duration (s)] = stopSkipMatte
      store = nothing
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  Routine shinyReminder
    TextComponent remindText
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now, acutual experiment is starting. In this section of the experiment, the question will be "which object looks more SHINY?". You can look at both objects for as long as you like, then please click either the left or the right arrow key to indicate which object you think looks more SHINY. There are a total of 100 trials in this section. You should indicate your selection by clicking right/left arrow.

        Press "Space" to continue
    KeyboardComponent skipShinyTrial
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.1
      store = nothing
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  Routine softFamiliarization
    TextComponent famSoft
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now lets get familiarized with object types.

        Now you will see some SOFT objects.
        Motion of Soft objects deform the shape of objects.

        Press "Space" to continue
    KeyboardComponent skipFamSoft
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.1
      store = nothing
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  Routine softEx
    CodeComponent softExType
      Code Type = Auto->JS
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      Begin Experiment:
        example_type="SOFT"
      Begin Routine:
        example_type="SOFT" if groundTruth=="soft" else "RIGID"

        #if difficulty_index==11 and groundTruth=="shiny":
        if softAdapt.thisTrialN==9:
            durMatte=1000
            startSkipMatte=0.3
            stopSkipMatte=1000
        else:
            durMatte=0
            startSkipMatte=0.099
            stopSkipMatte=0.1
    MovieComponent softExMovies
      No audio = True
      backend = moviepy
      forceEndRoutine = True
      loop = True
      movie [set every repeat] = $obj_dir
      saveStartStop = False
      size = [256,256]
      startVal [time (s)] = 0
      units = pix
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    KeyboardComponent skipSoftEx
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.1
      store = nothing
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    TextComponent skipTextSoftEx
      letterHeight = 0.03
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"It is a "+example_type + " object\n\nPress 'Space' to see next"
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  Routine blankSoftEx
    TextComponent blank100ms
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    TextComponent textRigid
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = durMatte
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      text:
        Now you will see some RIGID objects.
        Matte objects dont reflect their enviroment, you can think them as objects that have painting on the surface.

        Press "Space" to continue
    KeyboardComponent skipRigid
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = startSkipMatte
      stopVal [duration (s)] = stopSkipMatte
      store = nothing
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  Routine softReminder
    TextComponent remindSoft
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Second part is starting. In this section of the experiment, the question will be "which object looks more SOFT?". You can look at both objects for as long as you like, then please click either the left or the right arrow key to indicate which object you think looks more SOFT. There are a total of 100 trials in this section. You should indicate your selection by clicking right/left arrow.

        Press "Space" to continue
    KeyboardComponent skipSoftReminder
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.1
      store = nothing
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  Routine endOfExp
    TextComponent endText
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Thank you, the experiment has finished.

        Press 'Q' to quit the experiment.

        If you have further questions contact with omer.yildiran@ens.psl.eu
    KeyboardComponent endKey
      allowedKeys = 'q'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine blank_soft
    TextComponent occupier_soft
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    CodeComponent encode_soft
      Code Type = Auto->JS
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      End Routine:
        if targetPos[1]>0:
            if response_soft.keys[-1]=='right':
                feedback="Doğru"
                accuracy.append(1)
                gloss_trials.addData('cor_preddnn', 1)
            elif response_soft.keys[-1]=='left':
                feedback="Yanlış"
                accuracy.append(0)
                gloss_trials.addData('cor_preddnn', 0)

        elif targetPos[1]<0:
            if response_soft.keys[-1]=='left':
                feedback="Doğru"
                accuracy.append(1)
                gloss_trials.addData('cor_preddnn', 1)
            elif response_soft.keys[-1]=='right':
                feedback="Yanlış"
                accuracy.append(0)
                gloss_trials.addData('cor_preddnn', 0)
Flow
  Routine exp_start_instruc
  Routine familiarization_0
  LoopInitiator shiny_adap_trials loopType="TrialHandler"
    conditionsFile = glossy_examplar_objects.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('test_object', 120), ('true_type', 0), ('classified_as', 0), ('decision_value', -16.56748621), ('material_name', 'shiny_soft_gothicManor_None_[90, 0, 0]_[90, 0, 0]_WIND_1.067_0_4'), ('rigidity', 'soft'), ('glossiness', 'shiny'), ('decision_value_norm', -0.735730726), ('Glossiness', 'shiny'), ('Rigidity', 'soft'), ('Enviroment_Map', 'gothicManor'), ('Texture', 'None'), ('init_rot', [90, 0, 0]), ('end_rot', [90, 0, 0]), ('Force', 'WIND'), ('disp_scale', 1.067), ('disp_depth', 0), ('glossID', 0), ('rigidID', 1), ('type_truncted', 1), ('type8way', -1), ('detail', -1), ('obj_dir', 'v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,
      OrderedDict([('test_object', 28), ('true_type', 0), ('classified_as', 0), ('decision_value', -16.55869697), ('material_name', 'shiny_soft_uenoShrine_None_[51, 0, 0]_[51, 0, 0]_TURBULENCE_0.941_0_10'), ('rigidity', 'soft'), ('glossiness', 'shiny'), ('decision_value_norm', -0.735406954), ('Glossiness', 'shiny'), ('Rigidity', 'soft'), ('Enviroment_Map', 'uenoShrine'), ('Texture', 'None'), ('init_rot', [51, 0, 0]), ('end_rot', [51, 0, 0]), ('Force', 'TURBULENCE'), ('disp_scale', 0.941), ('disp_depth', 0), ('glossID', 0), ('rigidID', 1), ('type_truncted', 1), ('type8way', -1), ('detail', -1), ('obj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,
      OrderedDict([('test_object', 156), ('true_type', 0), ('classified_as', 0), ('decision_value', -16.34628391), ('material_name', 'shiny_soft_galileo_None_[11, 0, 0]_[11, 0, 0]_GUIDE_1.815_2_9'), ('rigidity', 'soft'), ('glossiness', 'shiny'), ('decision_value_norm', -0.727582214), ('Glossiness', 'shiny'), ('Rigidity', 'soft'), ('Enviroment_Map', 'galileo'), ('Texture', 'None'), ('init_rot', [11, 0, 0]), ('end_rot', [11, 0, 0]), ('Force', 'GUIDE'), ('disp_scale', 1.815), ('disp_depth', 2), ('glossID', 0), ('rigidID', 1), ('type_truncted', 1), ('type8way', -1), ('detail', -1), ('obj_dir', 'validati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,
      OrderedDict([('test_object', 297), ('true_type', 0), ('classified_as', 0), ('decision_value', -16.13488032), ('material_name', 'shiny_rigid_machineShop_None_[20, 0, 0]_[53, 45, 57]_None_1.128_0_2'), ('rigidity', 'rigid'), ('glossiness', 'shiny'), ('decision_value_norm', -0.719794661), ('Glossiness', 'shiny'), ('Rigidity', 'rigid'), ('Enviroment_Map', 'machineShop'), ('Texture', 'None'), ('init_rot', [20, 0, 0]), ('end_rot', [53, 45, 57]), ('Force', 'None'), ('disp_scale', 1.128), ('disp_depth', 0), ('glossID', 0), ('rigidID', 0), ('type_truncted', 2), ('type8way', 1), ('detail', 1), ('obj_dir'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
    Routine shiny_example
    Routine full_blank
  LoopTerminator shiny_adap_trials
  Routine shinyReminder
  LoopInitiator gloss_trials loopType="TrialHandler"
    conditionsFile = glossy_exp_objects.csv
    loopType = sequential
    nReps = 5
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    conditions:
      [OrderedDict([('test_object', 126), ('true_type', 0), ('classified_as', 0), ('decision_value', -23.74143063), ('material_name', 'shiny_soft_gothicManor_None_[7, 0, 0]_[7, 0, 0]_CHARGE_1.961_1_5'), ('rigidity', 'soft'), ('glossiness', 'shiny'), ('decision_value_norm', -1.0), ('Glossiness', 'shiny'), ('Rigidity', 'soft'), ('Enviroment_Map', 'gothicManor'), ('Texture', 'None'), ('init_rot', [7, 0, 0]), ('end_rot', [7, 0, 0]), ('Force', 'CHARGE'), ('disp_scale', 1.961), ('disp_depth', 1), ('glossID', 0), ('rigidID', 1), ('type_truncted', 1), ('detail', -1)]),
      OrderedDict([('test_object', 182), ('true_type', 0), ('classified_as', 0), ('decision_value', -20.90701178), ('material_name', 'shiny_soft_abandoned_None_[86, 0, 0]_[86, 0, 0]_WIND_1.99_2_7'), ('rigidity', 'soft'), ('glossiness', 'shiny'), ('decision_value_norm', -0.895587453), ('Glossiness', 'shiny'), ('Rigidity', 'soft'), ('Enviroment_Map', 'abandoned'), ('Texture', 'None'), ('init_rot', [86, 0, 0]), ('end_rot', [86, 0, 0]), ('Force', 'WIND'), ('disp_scale', 1.99), ('disp_depth', 2), ('glossID', 0), ('rigidID', 1), ('type_truncted', 1), ('detail', -1)]),
      OrderedDict([('test_object', 298), ('true_type', 0), ('classified_as', 0), ('decision_value', -19.53749142), ('material_name', 'shiny_rigid_machineShop_None_[19, 0, 0]_[-46, -50, -54]_None_1.838_2_5'), ('rigidity', 'rigid'), ('glossiness', 'shiny'), ('decision_value_norm', -0.845137919), ('Glossiness', 'shiny'), ('Rigidity', 'rigid'), ('Enviroment_Map', 'machineShop'), ('Texture', 'None'), ('init_rot', [19, 0, 0]), ('end_rot', [-46, -50, -54]), ('Force', 'None'), ('disp_scale', 1.838), ('disp_depth', 2), ('glossID', 0), ('rigidID', 0), ('type_truncted', 2), ('detail', 1)]),
      OrderedDict([('test_object', 281), ('true_type', 0), ('classified_as', 0), ('decision_value', -18.99610056), ('material_name', 'shiny_rigid_machineShop_None_[76, 0, 0]_[-53, 38, 48]_None_1.693_2_0'), ('rigidity', 'rigid'), ('glossiness', 'shiny'), ('decision_value_norm', -0.825194501), ('Glossiness', 'shiny'), ('Rigidity', 'rigid'), ('Enviroment_Map', 'machineShop'), ('Texture', 'None'), ('init_rot', [76, 0, 0]), ('end_rot', [-53, 38, 48]), ('Force', 'None'), ('disp_scale', 1.693), ('disp_depth', 2), ('glossID', 0), ('rigidID', 0), ('type_truncted', 2), ('detail', 1)])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
    Routine trial
    Routine blank
  LoopTerminator gloss_trials
  Routine endOfExp
